PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Impression mangement
  keyboardBackend = ioHub
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Routines
  Routine threat
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Who do you think poses a threat to you ? 
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    ImageComponent un3
      image [set every repeat] = /Users/mac/Downloads/un2.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
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    ImageComponent goodlooking3
      image [set every repeat] = /Users/mac/Downloads/good2.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 2
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    KeyboardComponent key_
      allowedKeys = "1" , "2"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine advice
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = When seeking advice, who would you be more inclined towards?
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    ImageComponent un4
      image [set every repeat] = /Users/mac/Downloads/un3.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
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    ImageComponent goodlooking4
      image [set every repeat] = /Users/mac/Downloads/good3.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 2
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    KeyboardComponent key_3
      allowedKeys = "1" , "2"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine leader
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Who do you think would make a better leader than the other?
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    ImageComponent un2
      image [set every repeat] = /Users/mac/Downloads/un5.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
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    ImageComponent goodlooking2
      image [set every repeat] = /Users/mac/Downloads/download.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 2
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    KeyboardComponent key
      allowedKeys = "1" , "2"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intelligence
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Who do you think is more intelligent?
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    ImageComponent goodlooking
      image = /Users/mac/Downloads/good looking 1 .jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
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    ImageComponent un
      image = /Users/mac/Downloads/un1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 2
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    KeyboardComponent key_2
      allowedKeys = "1" , "2"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine altruism
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Who do you think will turn out to be more altruistic ?
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    ImageComponent un5
      image [set every repeat] = /Users/mac/Downloads/good4.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
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    ImageComponent goodlooking5
      image [set every repeat] = /Users/mac/Downloads/un4.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 2
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    KeyboardComponent key_4
      allowedKeys = "1" , "2"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        Welcome

        Instruction for this experiment are as follows :

        1) Press "1" if you wish to select the first candidate
        2) Press "2" if you wish to select the second candidate
        3) There are 5 questions in the experiment
  Routine job_
  Routine job
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Who is more likely to have better job opportunities?
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    ImageComponent goodlooking6
      image [set every repeat] = /Users/mac/Downloads/good6.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
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    ImageComponent un6
      image [set every repeat] = /Users/mac/Downloads/un6.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 2
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    KeyboardComponent key__2
      allowedKeys = "1" , "2"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine Instruction
    Routine Intelligence
    Routine leader
    Routine threat
    Routine advice
    Routine altruism
    Routine job
  LoopTerminator trials
